// imports
import org.micromanager.display.DisplayWindow;
import org.micromanager.MultiStagePosition;
import org.micromanager.SequenceSettings;
import org.micromanager.api.AcquisitionOptions;
import org.micromanager.data.Coords;
import org.micromanager.data.Datastore;
import org.micromanager.data.Image;
import org.micromanager.data.Metadata;
import org.micromanager.data.Metadata.MetadataBuilder;
import org.micromanager.data.SummaryMetadata;
import org.micromanager.data.SummaryMetadataBuilder;

import mmcorej.*;

import java.awt.geom.Point2D;
import java.lang.System;
import java.lang.Math;
import java.lang.String;
import java.text.SimpleDateFormat;
import java.util.regex.Matcher;
import java.util.regex.Pattern;

import ij.gui.GenericDialog;
import ij.ImagePlus;
import ij.ImageStack;

// function to send/receive commands from Tiger controller
// checks if commands were received / response sent correctly
// checkbusy flag checks if stage is still executing move

String setTigerCommand(String port,String command,boolean checkbusy) {
	
	String answer="";
	send_success=false;
	
	// make sure command and response were received
	while (!send_success) {

		// send command
		exception_occured=false;
		try {
			mmc.setSerialPortCommand(port, command, "\r");
		}
		catch (Exception ex) {
			mmc.sleep(100);
			send_success=false;
			exception_occured=true;
		}
		if (!exception_occured) {
			send_success=true;
		}

		// get response
		send_success=false;
		exception_occured=false;
		try {
			answer = mmc.getSerialPortAnswer(port, "\r\n");
		}
		catch (Exception ex) {
			mmc.sleep(100);
			send_success=false;
			exception_occured=true;
		}
		if (!exception_occured) {
			send_success=true;
		}
	}

	// checkbusy flag active, check if stage is moving
	if (checkbusy) {
		answer="";
		send_success=false;

		// make sure command and response were received
		while (!send_success) {
			//send command
			exception_occured=false;
			try {
				mmc.setSerialPortCommand(port, "STATUS", "\r");
			}
			catch (Exception ex) {
				mmc.sleep(100);
				send_success=false;
				exception_occured=true;
			}
			if (!exception_occured) {
				send_success=true;
			}
		}

		// get response
		send_success=false;
		exception_occured=false;
		
		try {
			answer = mmc.getSerialPortAnswer(port, "\r\n");
		}
		catch (Exception ex) {
			mmc.sleep(100);
			send_success=false;
			exception_occured=true;
		}
		if (!exception_occured) {
			send_success=true;
		}

		// stage responded busy. check again.
		while (!answer.matches("N")) {
			answer="";
			send_success=false;

			// make sure command and response were received
			while (!send_success) {
				// send command
				exception_occured=false;
				try {
					mmc.setSerialPortCommand(port, "STATUS", "\r");
				}
				catch (Exception ex) {
					mmc.sleep(100);
					send_success=false;
					exception_occured=true;
				}
				if (!exception_occured) {
					send_success=true;
				}
			}

			// get response
			send_success=false;
			exception_occured=false;

			try {
				answer = mmc.getSerialPortAnswer(port, "\r\n");
			}
			catch (Exception ex) {
				mmc.sleep(100);
				send_success=false;
				exception_occured=true;
			}
			if (!exception_occured) {
				send_success=true;
			}
		}
	}

	// return final answer from Tiger
	return answer;
}

// user settings

// --------------------------------

// exposure time
float exposure_ms = 50.;	// (ms)

// scan settings
float overlap = 0.1;			// (%)
float start_x = 11.25;		// (mm)
float end_x = 11.5;			// (mm)
float start_y = 4.0;			// (mm)
float end_y = 0.5;			// (mm)

// tiger controller port
port = "COM15";

// display aquisition flag
// should be false unless running a small scan
boolean display_acq=false;

// --------------------------------

// assign the core to mmc variable
mmc = mm.getCore();

// clean up any existing acquisitions
mmc.stopSequenceAcquisition();
mmc.clearCircularBuffer();

// get focus device
z_stage = mmc.getFocusDevice();

// pull acquisition settings from MDA window
acq_settings = mm.acquisitions().getAcquisitionSettings();
root_dir = acq_settings.root;
root_dir_unique = mm.data().getUniqueSaveDirectory(root_dir);

// Create multipagetiff datatstore
Datastore store = mm.data().createMultipageTIFFDatastore(root_dir_unique,true,false);

// Create a display for the datastore
if (display_acq) {
	DisplayWindow display = mm.displays().createDisplay(store);
	mm.displays().manage(store);
}

// Setup scan

// Setup PLC card to give start trigger

String plcName = "PLogic:E:36";
String propPosition = "PointerPosition";
String propCellConfig = "EditCellConfig";
int addrOutputBNC3 = 35;
int addrStageSync = 46;  // TTL5 on Tiger backplane = stage sync signal
 
// connect to BNC output
mmc.setProperty(plcName, propPosition, addrOutputBNC3);
mmc.setProperty(plcName, propCellConfig, addrStageSync);

// calculate scan properties

float pixel_size_um = 0.116; 							// (um)
float scan_step_mm = pixel_size_um / 1000.;		// (mm)
float exposure_s = exposure_ms / 1000.; 			// (s)
float scan_rate = scan_step_mm / exposure_s;	// (mm/s)

float scan_distance = Math.abs(start_x-end_x);						// (mm)
float tile_step_um = (2048.*pixel_size_um) * (1-overlap); 		 	// (um)
float tile_step_mm = (2048.*pixel_size_um) * (1-overlap) * .001; 	// (mm)
float tile_step_asi = (2048.*pixel_size_um) * (1-overlap) * 10.0; // (.1 um)

int num_images = Math.round(scan_distance / (scan_rate * exposure_s));
int num_tiles = Math.round((Math.abs(Math.abs(start_y)-Math.abs(end_y))/tile_step_mm));

print("Scan rate: "+scan_rate+" mm/s");
print("Number of camera acquisitions per scan strip: "+num_images);
print("Number of strips: "+num_tiles);
print("Total images: "+(num_images*num_tiles));

//--------------------------------

// setup camera

// set to fast readout

// set trigger to START

// turn off error correction

// set ROI

// set exposure
mmc.setExposure(exposure_ms);

// setup Tiger controller and move to initial position

// set tiling stage to a fast speed
command = "SPEED Y=.5";
answer = setTigerCommand(port,command,false);
print("Set tiling stage speed to fast.");

// move tiling stage to initial position
command = "MOVE Y="+start_y*10000;
answer = setTigerCommand(port,command,true);
print("Moved tiling stage to start position of: "+start_y);

// set slow scan stage to a fast speed
command = "SPEED X=.5";
answer = setTigerCommand(port,command,false);
print("Set scan stage speed to fast for initial move.");

// move slow scan stage to initial position
command = "MOVE X="+start_x*10000;
answer = setTigerCommand(port,command,true);
print("Moved scan stage to: "+start_x);

// set slow scan stage to constant rate slow scan speed
command = "SPEED X="+scan_rate;
answer = setTigerCommand(port,command,false);
print("Set scan stage speed to slow.");

// set slow scan stage to true 1D scan with no backlash
command = "1SCAN X? Y=0 Z=9 F=0";
answer = setTigerCommand(port,command,false);
print("Set to true 1D slow scan");

// set range for slow scan stage
command = "1SCANR X="+start_x+" Y="+end_x+" R=50";
answer = setTigerCommand(port,command,false);
print("Set slow scan range.");

// create Coordinates builder object
Coords.CoordsBuilder builder = mm.data().getCoordsBuilder();

// initialize tiling counters
int y_counter=0;
int stage_pos=0;

while (y_counter < num_tiles) {

	// initialize slow scan counters
	int x_counter=0;

	// grab X and Z position
	Point2D.Double point = mmc.getXYStagePosition();
	y_now = point.getY();
	z_now = mmc.getPosition(z_stage);

	// start acquisition sequence with camera in internal mode for fastest acquisition
	mmc.startSequenceAcquisition(num_images, 0, true);
	mmc.sleep(100);
	
	// start scan
	command = "1SCAN";
	answer = setTigerCommand(port,command,false);
	print("Running slow scan... ");

	// execute acquisition until no more images are left in the buffer
	while (mmc.getRemainingImageCount() > 0 || mmc.isSequenceRunning(mmc.getCameraDevice())) {
		// if there are images in the buffer, grab and process
		if (mmc.getRemainingImageCount() > 0) {
			// convert top image in buffer to imageProcessor
			TaggedImage tagged = mmc.popNextTaggedImage();
			Image image = mm.data().convertTaggedImage(tagged);

			// grab current y stage position	
			Point2D.Double point = mmc.getXYStagePosition();
			x_now = point.getX();
			
			//Create metadata object for image
			MetadataBuilder mdb = image.getMetadata().copy();
			md = mdb.positionName("ch0_x"+x_counter+"_y"+y_counter).xPositionUm(x_now).yPositionUm(y_now).zPositionUm(z_now).build();
					
			//Build datastore coordinates for image
			builder.stagePosition(stage_pos);
			Coords coords = builder.build();
		
			//Create second image with metadata and datastore coordinates
			image_toDataStore = image.copyWith(coords, md);
				
			//Place image into dataStore
			store.putImage(image_toDataStore);

			// increment slow scan counters
			x_counter++;
			stage_pos++;

			// output progress report
			int test_counter = x_counter%1000;
			if (test_counter==0) {
				//print("Total camera fires:" +total_counter);
				print("At strip "+(y_counter+1)+" of "+num_tiles+" total strips. Acquired "+x_counter+" images out of "+num_images+" for this strip so far...");
			}
		}
		// no images in buffer, wait for another image to arrive.
		else {
			mmc.sleep(Math.min(.5 * exposure_ms, 10));
		}
	}

	// clean up slow scan acquistion
	mmc.stopSequenceAcquisition();
	mmc.clearCircularBuffer();
	
	// wait to give fly back a chance to finish and controller to return to visible
	mmc.sleep(2000);

	// make sure the correct number of images were acquired
	if (x_counter == num_images) {

		// check if fly back has finished and that controller is available
		command = "STATUS";
		answer = setTigerCommand(port,command,true);
		print("Scan stage has reset to initial position.");

		// increment tiling counter
		y_counter++;

		// move tiling stage (overlap)*(large image size)
		command = "MOVREL Y="+tile_step_asi;
		answer = setTigerCommand(port,command,true);
		print("Moved tiling stage to: "+(start_y+(y_counter*tile_step_mm)));
	}
	// something went wrong
	else {
		print("An error occurred during image scanning...");

		// set slow scan stage to fast speed
		command = "SPEED X=.5";
		answer = setTigerCommand(port,command,false);
		print("Set scan stage speed to fast.");

		// fly back to initial slow scan position
		command = "MOVE X="+start_x*10000;
		answer = setTigerCommand(port,command,true);
		print("Moved scan stage to: "+start_y);

		// fly back to initial tiling position
		command = "MOVE Y="+start_y*10000;
		answer = setTigerCommand(port,command,true);
		print("Moved tiling stage to: "+start_x);
		
		exit;
		break;
	}
}

//Finish writing data to disk
store.freeze();

//Close dataStore object
store.close();	